# Generated by Configurator on Mon Jul 08 14:34:14 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,Raptor Ninox Camera 640,RaptorEPIX,Raptor Ninox Camera 640
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter

# Pre-init settings for devices
Property,Raptor Ninox Camera 640,EPIX Units to Open,1
Property,Raptor Ninox Camera 640,EPIX_Unit,1
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM4

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,57600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Raptor Ninox Camera 640
Property,Core,Shutter,Arduino-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0

# Configuration presets
# Group: Arduino Trigger
# Preset: 1
ConfigGroup,Arduino Trigger,1,Arduino-Shutter,OnOff,1

# Preset: Startup
ConfigGroup,Arduino Trigger,Startup,Arduino-Shutter,OnOff,0


# Group: Channel

# Group: Auto Exposure
# Preset: On
ConfigGroup,Auto Exposure,On,Raptor Ninox Camera 640,Exposure: Auto,On

# Preset: Off
ConfigGroup,Auto Exposure,Off,Raptor Ninox Camera 640,Exposure: Auto,Off


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Exposure: Auto,Off
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Frame Interval (ms),0.0000
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Frame Rate,User Defined
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Frame Rate (User),0.0000
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Gain,0.0000
ConfigGroup,System,Startup,Raptor Ninox Camera 640,High Gain,Off
ConfigGroup,System,Startup,Raptor Ninox Camera 640,TE Cooler,On
ConfigGroup,System,Startup,Raptor Ninox Camera 640,TEC Fan,On
ConfigGroup,System,Startup,Raptor Ninox Camera 640,TEC Set Point (oC),-15.0000
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Trig. Timeout (sec),5.0000
ConfigGroup,System,Startup,Raptor Ninox Camera 640,Use Defaults,Off
ConfigGroup,System,Startup,Core,AutoShutter,0


# Group: High Gain
# Preset: On
ConfigGroup,High Gain,On,Raptor Ninox Camera 640,High Gain,On

# Preset: Off
ConfigGroup,High Gain,Off,Raptor Ninox Camera 640,High Gain,Off


# Group: Sensor Cooling
# Preset: On
ConfigGroup,Sensor Cooling,On,Raptor Ninox Camera 640,TE Cooler,On
ConfigGroup,Sensor Cooling,On,Raptor Ninox Camera 640,TEC Fan,On


# Group: Reset Defaults
# Preset: Use Defaults
ConfigGroup,Reset Defaults,Use Defaults,Raptor Ninox Camera 640,Use Defaults,Use Defaults

# Preset: Off
ConfigGroup,Reset Defaults,Off,Raptor Ninox Camera 640,Use Defaults,Off


# Group: Digital Gain
# Preset: NewPreset
ConfigGroup,Digital Gain,NewPreset,Raptor Ninox Camera 640,Gain,30.9336


# Group: Arduino State
# Preset: Startup
ConfigGroup,Arduino State,Startup,Arduino-Switch,State,63


# Group: Test
# Preset: 1
ConfigGroup,Test,1,Core,AutoShutter,1

# Preset: 0
ConfigGroup,Test,0,Core,AutoShutter,0



# PixelSize settings

